CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:318
GitHash:
ModuleCount:12
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Color image
    Name to assign these images:DNA
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
UnmixColors:[module_num:5|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
    Stain count:2
    Select the input color image:DNA
    Name the output image:Hematoxylin
    Stain:Hematoxylin
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    Name the output image:Eosin
    Stain:Eosin
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
IdentifyPrimaryObjects:[module_num:6|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
    Select the input image:Hematoxylin
    Name the primary objects to be identified:Nuclei_H_stain
    Typical diameter of objects, in pixel units (Min,Max):8,40
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Shape
    Size of smoothing filter:15
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:9
    Threshold strategy:Global
    Thresholding method:RobustBackground
    Threshold smoothing scale:1.3488
    Threshold correction factor:2.0
    Lower and upper bounds on threshold:0.0,1.0
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    Lower outlier fraction:0.02
    Upper outlier fraction:0.02
    Averaging method:Mode
    Variance method:Standard deviation
    # of deviations:0
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
ColorToGray:[module_num:7|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
    Select the input image:DNA
    Conversion method:Combine
    Image type:RGB
    Name the output image:OrigGray
    Relative weight of the red channel:1.0
    Relative weight of the green channel:1.0
    Relative weight of the blue channel:1.0
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
Threshold:[module_num:8|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
    Select the input image:OrigGray
    Name the output image:ThreshNuclei
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
ImageMath:[module_num:9|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
    Operation:Invert
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:Inverted
    Image or measurement?:Image
    Select the first image:ThreshNuclei
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
IdentifyPrimaryObjects:[module_num:10|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
    Select the input image:Inverted
    Name the primary objects to be identified:Nuclei_Invert
    Typical diameter of objects, in pixel units (Min,Max):10,60
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Propagate
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:9
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:1.3488
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    Manual threshold:0.1
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
ConvertObjectsToImage:[module_num:11|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
    Select the input objects:Nuclei_Invert
    Name the output image:CellImage
    Select the color format:Color
    Select the colormap:Default

SaveImages:[module_num:12|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
    Select the type of image to save:Image
    Select the image to save:CellImage
    Select method for constructing file names:From image filename
    Select image name for file prefix:DNA
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    Append a suffix to the image file name?:No
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    Saved file format:npy
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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